<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.7.3"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p1="clr-namespace:Harp.SwcLinearDrive;assembly=Harp.SwcLinearDrive"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Operation</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>true</harp:IgnoreErrors>
                <harp:PortName>COM6</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Events</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>GoToPosition</rx:Name>
            </Expression>
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:SetPosition" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Disabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateLimitContinuousCurrentPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>900</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateLimitPeakCurrentPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>900</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:MessageType>Event</harp:MessageType>
        <harp:Register xsi:type="p1:TimestampedPosition" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Position</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel A B C Control</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>MoveToEdge</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableLimitPositionPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Disabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Enabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateSetSpeedPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>-100</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CheckStop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:BufferCount">
                <rx:Count>10</rx:Count>
                <rx:Skip>1</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DerivativeThreshold" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>IsStopped</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Difference">
                      <dsp:Order>1</dsp:Order>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sum" />
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" />
                  </Expression>
                  <Expression xsi:type="LessThan">
                    <Operand xsi:type="DoubleProperty">
                      <Value>4</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="6" Label="Source1" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SetHome</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateSetSpeedPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>0</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Disabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateHomePositionPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>-3000</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GoTo0</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Enabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateSetPositionPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>0</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableLimitPositionPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Enabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>RemoveCurrentLimits</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ContinuousMax" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateLimitContinuousCurrentPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>3000</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="PeakMax" />
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateLimitPeakCurrentPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>3000</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton RButton Cancel MButton XButton1 XButton2 Space Prior PageUp Next PageDown End Home Left Up Right Control</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:Payload xsi:type="p1:CreateSetSpeedPayload">
          <harp:MessageType>Write</harp:MessageType>
          <p1:Value>100</p1:Value>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton MButton XButton1 Space Prior PageUp Home Left Control</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:Payload xsi:type="p1:CreateSetSpeedPayload">
          <harp:MessageType>Write</harp:MessageType>
          <p1:Value>-100</p1:Value>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>CheckStop</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MinLimit" />
            </Expression>
            <Expression xsi:type="LessThan">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="MaxLimit" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="IntProperty">
                <Value>160000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p1:CreateMessage">
              <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
                <harp:MessageType>Write</harp:MessageType>
                <p1:Value>Disabled</p1:Value>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Back Space Down Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
          <harp:MessageType>Write</harp:MessageType>
          <p1:Value>Disabled</p1:Value>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>RButton MButton XButton2 Space Next PageDown Home Up Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:Payload xsi:type="p1:CreateEnableMotorDriverPayload">
          <harp:MessageType>Write</harp:MessageType>
          <p1:Value>Enabled</p1:Value>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>MButton D Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GoRight</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>50000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:SetPosition" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>LButton A Control</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>GoLeft</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Position</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-50000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="p1:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="p1:SetPosition" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="29" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>